PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant': '', 'run': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1536, 864]
  color = $[-1,-1,-1]
  expName = OEA_scan
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Routines
  Routine wait
    KeyboardComponent trigger
      allowedKeys = '5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    TextComponent text
      letterHeight = 30
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = wait for 5 trigger from scanner
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  Routine visualcue
    ImageComponent visual_cue
      image [set every repeat] = $imgpath
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $cue_ITI
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    CodeComponent pump_code
      Code Type = Py
      Begin Experiment:
        #import stuff
        import serial
        import time

        #open serial port
        ser = serial.Serial(port='COM4', baudrate=19200, bytesize=8)

        #pump order:
        #0 - tless
        #1 - choc milk
        #2 - straw milk
        #3 - rinse
  Routine taste_delivery
    TextComponent taste_delivery_text
      disabled = True
      letterHeight = 40
      pos = (0, -400)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = Taste delivery, 1.5s
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    PolygonComponent taste_delivery_fixation
      fillColor = white
      shape = cross
      size = (100,100)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        if eventtype == 'tless':
            ser.write(("0run\r").encode())
        elif eventtype == 'milkchoc':
            ser.write(("1run\r").encode())
        elif eventtype == 'milkstraw':
            ser.write(("2run\r").encode())
  Routine tasteITI
    PolygonComponent taste_delivery_ITI
      fillColor = white
      shape = cross
      size = 100
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $taste_ITI
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    TextComponent taste_ITI_text
      disabled = True
      letterHeight = 30
      pos = (0, -400)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $taste_ITI
      text = Taste ITI, 6s + jitter
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  Routine rinse_delivery
    TextComponent rinse_delivery_text
      disabled = True
      letterHeight = 40
      pos = (0, -400)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $rinse_delivery
      text [set every repeat] = Rinse delivery, 1.5s
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    PolygonComponent rinse_delivery_fixation
      fillColor = white
      shape = cross
      size = (100,100)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $rinse_delivery
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        if rinse_delivery == 1.5:
            ser.write(("3run\r").encode())
        else:
            pass
  Routine rinseITI
    PolygonComponent rinse_ITI_fixation
      fillColor = white
      shape = cross
      size = 100
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $rinse_ITI
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    TextComponent rinse_ITI_text
      disabled = True
      letterHeight = 30
      pos = (0, -400)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $rinse_ITI
      text [set every repeat] = Rinse ITI, 4s + jitter
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  Routine end
    KeyboardComponent end_task_trigger
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent end_task
      letterHeight = 30
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = You have completed this scan :)
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Flow
  Routine wait
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = eventtype.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('imgpath', 'images/milk.jpg'), ('eventtype', 'milkstraw'), ('cue_jitter', 0.95), ('taste_ITI', 6), ('taste_jitter', 0.22), ('rinse_ITI', 4), ('rinse_jitter', 1.22)]),
      OrderedDict([('imgpath', 'images/milk.jpg'), ('eventtype', 'milkchoc'), ('cue_jitter', 2.53), ('taste_ITI', 6), ('taste_jitter', 7.45), ('rinse_ITI', 4), ('rinse_jitter', 0.22)]),
      OrderedDict([('imgpath', 'images/milk.jpg'), ('eventtype', 'milkstraw'), ('cue_jitter', 0.79), ('taste_ITI', 6), ('taste_jitter', 4.44), ('rinse_ITI', 4), ('rinse_jitter', 1.99)]),
      OrderedDict([('imgpath', 'images/milk.jpg'), ('eventtype', 'milkchoc'), ('cue_jitter', 2.47), ('taste_ITI', 6), ('taste_jitter', 1.59), ('rinse_ITI', 4), ('rinse_jitter', 0.05)]),
      OrderedDict([('imgpath', 'images/milk.jpg'), ('eventtype', 'milkstraw'), ('cue_jitter', 0.87), ('taste_ITI', 6), ('taste_jitter', 1.66), ('rinse_ITI', 4), ('rinse_jitter', 0.36)]),
      OrderedDict([('imgpath', 'images/milk.jpg'), ('eventtype', 'milkchoc'), ('cue_jitter', 5.36), ('taste_ITI', 6), ('taste_jitter', 0.84), ('rinse_ITI', 4), ('rinse_jitter', 0.37)]),
      OrderedDict([('imgpath', 'images/milk.jpg'), ('eventtype', 'milkstraw'), ('cue_jitter', 0.03), ('taste_ITI', 6), ('taste_jitter', 1.16), ('rinse_ITI', 4), ('rinse_jitter', 1.59)]),
      OrderedDict([('imgpath', 'images/milk.jpg'), ('eventtype', 'milkchoc'), ('cue_jitter', 0.45), ('taste_ITI', 6), ('taste_jitter', 0.45), ('rinse_ITI', 4), ('rinse_jitter', 1.62)])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
    Routine visualcue
    Routine taste_delivery
    Routine tasteITI
    Routine rinse_delivery
    Routine rinseITI
  LoopTerminator trials
  Routine end
